PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expName, expInfo['participant'])
  Experiment info = {'participant': 'f"sub_{randint(0, 9999):04.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = seq_tasks
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Instruction
    RoutineSettingsComponent Instruction
      saveStartStop = False
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    TextComponent text_inst
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Experimental Instruction

        Welcome to our reproduction experiment. In this experiment, you will see a Gabor patch appears on the screen. You need to remember the DURATION of the Gabor patch. After it disappears, a cue (either circle or triangle) will appear.

        When the cue is CIRCLE, you are asked to press the 'Down' Arrow key as long as what you perceived. The key press will show a Gabor patch again, helping you compare the last duration.

        If the cue is TRIANGLE, a Gabor patch will automatically appear. Your task is to press the 'Down' arrow key as soon as it appears and release the key when it disappears.

        Press SPACE to start ...
    KeyboardComponent space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
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    PolygonComponent fix
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        # generate random orientation

        orientation = randint(1,180)
      Begin Routine:
        orientation = randint(1,180)
        print(orientation)
  Routine Encoding
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    GratingComponent grating
      mask = gauss
      ori [set every frame] = orientation
      saveStartStop = False
      sf = 1
      size = (5, 5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $duration
      tex = sin
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    CodeComponent Code_encoding
      Code Type = Auto->JS
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      Begin Experiment:
        # generate random orientation

        orientation = randint(1,180)
      Begin Routine:
        orientation = randint(1,180)
    PolygonComponent c_fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine retro_cue
    RoutineSettingsComponent retro_cue
      saveStartStop = False
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    PolygonComponent cue_triangle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1, -1.0, 1.0
      saveStartStop = False
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $dur_tri
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        dur_tri = 0  # cue duration
        dur_cir = 0
      Begin Routine:
        if cue == "reproduction":
            dur_cir = 0.5
            dur_tri = 0
        else:
            dur_tri = 0.5
            dur_cir = 0
    PolygonComponent cue_circle
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $dur_cir
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  Routine Reproduction
    RoutineSettingsComponent Reproduction
      skipIf = $cue == 'following'
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    GratingComponent reproduced_grating
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [condition] = $key_pressed 
      stopVal [condition] = $key_released
      tex = sin
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        kb = keyboard.Keyboard()

        repDuration = 0
      Begin Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        key = kb.getKeys(['down'], waitRelease = False, clear = False)

        key_pressed = False
        key_released = True

        key_onset = 0
        key_offset = 0

        repDuration = 0
      Each Frame:
        keys = kb.getKeys(['down'], waitRelease=False,clear = False)

        for key in keys:
            if key.duration is None:
                key_pressed = True
                key_released = False
                key_onset = key.t

        if key_pressed: # after key pressed
            if not keys:
                key_released = True
                key_offset =  globalClock.getTime(format='float')
                continueRoutine = False
      End Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        #store random orientation in the data
        repDuration = key_offset - key_onset
        thisExp.addData('orientation',orientation)
        thisExp.addData('repDuration', repDuration)
  Routine passive
    RoutineSettingsComponent passive
      saveStartStop = False
      skipIf = $cue == 'reproduction'
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        key = kb.getKeys(['down'], waitRelease = False, clear = False)

        key_pressed = False
        key_released = True

        key_follow_onset = 0
        key_follow_offset = 0

        followDuration = 0
      Each Frame:
        keys = kb.getKeys(['down'], waitRelease=False,clear = False)

        for key in keys:
            if key.duration is None:
                key_pressed = True
                key_released = False
                if key_follow_onset == 0:
                    key_follow_onset = key.t

        if key_pressed: # after key pressed
            if not keys:
                key_released = True
                key_follow_offset = globalClock.getTime(format='float')
      End Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        #store random orientation in the data
        followDuration = key_follow_offset - key_follow_onset
        thisExp.addData('passive_key_onset',key_follow_onset)
        thisExp.addData('passive_key_offset', key_follow_offset)
        thisExp.addData('followDuration', followDuration)
    GratingComponent passive_grating
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $duration
      tex = sin
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0 + duration
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  Routine blank
    RoutineSettingsComponent blank
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine passive_gap
    RoutineSettingsComponent passive_gap
      saveStartStop = False
      skipIf = cue == 'reproduction'
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
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  Routine feedback
    RoutineSettingsComponent feedback
      skipIf = trials.thisN >= 24
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    TextComponent feedback_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every frame] = $fb_text
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    CodeComponent code_5
      Code Type = Py
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      Before Experiment:
        fb_text  = ''
      Begin Routine:
        error_ratio = np.min([np.abs(repDuration/duration -1), np.abs(followDuration/duration -1)])

        if error_ratio > 0.3:
            fb_text = "Your key pressed duration deviated too far!"
        else:
            fb_text = ''
    TextComponent dummy_1500ms
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine BlockInfo
    RoutineSettingsComponent BlockInfo
      skipIf = (trials.thisN +1) % 48 > 0
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    TextComponent text_rest
      letterHeight = 0.5
      pos = (0, 5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please take a rest! Press any key to continue ...
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    TextComponent blk_infotxt
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $blk_info
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        blk_info = ''
      Begin Routine:
        blknum = trials.thisN // 48
        blk_info = f"That was block #{blknum}. You did great job!"
        print(blk_info)
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','down','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 48
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    conditions:
      [{'duration': 0.8, 'cue': 'reproduction'},
      {'duration': 0.9, 'cue': 'reproduction'},
      {'duration': 1, 'cue': 'reproduction'},
      {'duration': 1.1, 'cue': 'reproduction'},
      {'duration': 1.2, 'cue': 'reproduction'},
      {'duration': 1.3, 'cue': 'reproduction'},
      {'duration': 1.4, 'cue': 'reproduction'},
      {'duration': 0.8, 'cue': 'following'},
      {'duration': 0.9, 'cue': 'following'},
      {'duration': 1, 'cue': 'following'},
      {'duration': 1.1, 'cue': 'following'},
      {'duration': 1.2, 'cue': 'following'},
      {'duration': 1.3, 'cue': 'following'},
      {'duration': 1.4, 'cue': 'following'}]
    Routine Encoding
    Routine retro_cue
    Routine Reproduction
    Routine passive
    Routine feedback
    Routine BlockInfo
  LoopTerminator trials
