PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = sounddevice
  Data filename = u'data/%s_%s' % (expName, expInfo['participant'])
  Experiment info = {'participant': 'f"{randint(0, 999999):04.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Use version = 2024
  Window size (pixels) = [1920, 1080]
  expName = seq_tasks_v2023
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instruction
    RoutineSettingsComponent Instruction
      saveStartStop = False
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    TextComponent text_inst
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Experimental Instruction

        Welcome to our reproduction experiment. In this experiment, you will see a Gabor patch appears on the screen. You need to remember the DURATION of the Gabor patch. After it disappears, a cue (either circle or triangle) will appear.

        When the cue is 'R', you are asked to press the 'Down' Arrow key as long as what you perceived. The key press will show a Gabor patch again, helping you compare the last duration.

        If the cue is 'F', a Gabor patch will automatically appear. Your task is to press the 'Down' arrow key as soon as it appears and release the key when it disappears.

        Press SPACE to start ...
    KeyboardComponent space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Encoding
    RoutineSettingsComponent Encoding
      saveStartStop = False
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    GratingComponent grating
      contrast = 0.25
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration
      tex = sin
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    CodeComponent code_encoding
      Code Type = Auto->JS
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      Begin Experiment:
        # generate random orientation

        orientation = randint(1,180)

        durations = np.arange(0.8, 1.5, 0.1)
      Begin Routine:
        orientation = randint(1,180)
    PolygonComponent c_fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine retro_cue
    RoutineSettingsComponent retro_cue
      saveStartStop = False
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    CodeComponent code_retro_cue
      Code Type = Auto->JS
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      Begin Experiment:
        cue_text = ''
      Begin Routine:
        if cue == "reproduction":
            cue_text = 'R'
        else:
            cue_text = 'F'

        cue_onset = globalClock.getTime()
    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .5
      text [set every repeat] = $cue_text
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  Routine Reproduction
    RoutineSettingsComponent Reproduction
      skipIf = $cue == 'following'
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    GratingComponent reproduced_grating
      contrast = .25
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [condition] = $key_pressed
      stopVal [condition] = $key_released
      tex = sin
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    CodeComponent code_reproduction
      Code Type = Py
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      Begin Experiment:
        kb = keyboard.Keyboard()

        repDuration = 0

        cueRTs = []
      Begin Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        key = kb.getKeys(['down'], waitRelease = False, clear = False)

        key_pressed = False
        key_released = True

        key_onset = 0
        key_offset = 0

        repDuration = 0
      Each Frame:
        keys = kb.getKeys(['down'], waitRelease=False,clear = False)

        for key in keys:
            if key.duration is None:
                key_pressed = True
                key_released = False
                if key_onset == 0:
                    key_onset = globalClock.getTime()

        if key_pressed: # after key pressed
            if not keys:
            #if isinstance(keys[0].duration, float):
                key_released = True
                key_offset = globalClock.getTime()
                repDuration = key_offset - key_onset
                continueRoutine = False
      End Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        #store random orientation in the data
        thisExp.addData('orientation',orientation)
        thisExp.addData('rpr_key_onset', key_onset)
        thisExp.addData('repDuration', repDuration)

        cue2rep_rt = key_onset - cue_onset

        thisExp.addData('cue2rep', cue2rep_rt)

        if cue == 'reproduction':
            cueRTs.append(cue2rep_rt)
            #print(cueRTs)
  Routine passive
    RoutineSettingsComponent passive
      skipIf = $cue == 'reproduction'
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    CodeComponent code_follow
      Code Type = Py
      Begin Experiment:
        followRsp = False

        gap = 0.5
      Begin Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        key = kb.getKeys(['down'], waitRelease = False, clear = False)

        key_pressed = False
        key_released = True

        key_follow_onset = 0
        key_follow_offset = 0

        followDuration = 0
        followRsp = False

        follow_dur = random.choice(durations)
      Each Frame:
        keys = kb.getKeys(['down'], waitRelease=False,clear = False)

        for key in keys:
            if key.duration is None:
                key_pressed = True
                key_released = False
                if key_follow_onset == 0:
                    key_follow_onset = globalClock.getTime()

        if key_pressed: # after key pressed
            if not keys:
            #if isinstance(keys[0].duration, float):
                key_released = True
                key_follow_offset = globalClock.getTime()
                followDuration = key_follow_offset - key_follow_onset #keys[0].duration
                followRsp = True
                #continueRoutine = False
      End Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        #store random orientation in the data
        thisExp.addData('passive_key_onset',key_follow_onset)
        thisExp.addData('followDuration',followDuration)
        thisExp.addData('stimulusDuration', follow_dur)
    GratingComponent passive_grating
      contrast = .25
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [time (s)] = $gap
      stopVal [duration (s)] = $follow_dur
      tex = sin
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $followRsp
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  Routine feedback
    RoutineSettingsComponent feedback
      skipIf = trials.thisN >= 24
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    TextComponent feedback_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every frame] = $fb_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        fb_text  = ''
      Begin Routine:
        error_ratio = np.min([np.abs(repDuration/duration -1), np.abs(followDuration/duration -1)])

        if error_ratio > 0.3:
            fb_text = "Your key pressed duration deviated too far!"
        else:
            fb_text = ''
    TextComponent dummy_1500ms
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine BlockInfo
    RoutineSettingsComponent BlockInfo
      skipIf = (trials.thisN +1) % 48 > 0
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    TextComponent text_rest
      letterHeight = 0.5
      pos = (0, 2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please take a rest! Press any key to continue ...
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    TextComponent blk_infotext
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $blk_info
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_blockinfo
      Code Type = Py
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      Begin Experiment:
        blk_info = ''
      Begin Routine:
        blknum = 1 + trials.thisN // 56
        blk_info = f"That was block #{blknum}. You did great job!"
        print(blk_info)

        if trials.thisN == 55: # last trial of the first practice block
            last14Following = cueRTs[-14:]
            gap = np.mean(last14Following) - 0.7
  Routine iti
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    TextComponent iti_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 12
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    conditions:
      [{'duration': 0.8, 'cue': 'reproduction'},
      {'duration': 0.9, 'cue': 'reproduction'},
      {'duration': 1, 'cue': 'reproduction'},
      {'duration': 1.1, 'cue': 'reproduction'},
      {'duration': 1.2, 'cue': 'reproduction'},
      {'duration': 1.3, 'cue': 'reproduction'},
      {'duration': 1.4, 'cue': 'reproduction'},
      {'duration': 0.8, 'cue': 'following'},
      {'duration': 0.9, 'cue': 'following'},
      {'duration': 1, 'cue': 'following'},
      {'duration': 1.1, 'cue': 'following'},
      {'duration': 1.2, 'cue': 'following'},
      {'duration': 1.3, 'cue': 'following'},
      {'duration': 1.4, 'cue': 'following'},
      {'duration': 0.8, 'cue': 'reproduction'},
      {'duration': 0.9, 'cue': 'reproduction'},
      {'duration': 1, 'cue': 'reproduction'},
      {'duration': 1.1, 'cue': 'reproduction'},
      {'duration': 1.2, 'cue': 'reproduction'},
      {'duration': 1.3, 'cue': 'reproduction'},
      {'duration': 1.4, 'cue': 'reproduction'},
      {'duration': 0.8, 'cue': 'following'},
      {'duration': 0.9, 'cue': 'following'},
      {'duration': 1, 'cue': 'following'},
      {'duration': 1.1, 'cue': 'following'},
      {'duration': 1.2, 'cue': 'following'},
      {'duration': 1.3, 'cue': 'following'},
      {'duration': 1.4, 'cue': 'following'},
      {'duration': 0.8, 'cue': 'reproduction'},
      {'duration': 0.9, 'cue': 'reproduction'},
      {'duration': 1, 'cue': 'reproduction'},
      {'duration': 1.1, 'cue': 'reproduction'},
      {'duration': 1.2, 'cue': 'reproduction'},
      {'duration': 1.3, 'cue': 'reproduction'},
      {'duration': 1.4, 'cue': 'reproduction'},
      {'duration': 0.8, 'cue': 'following'},
      {'duration': 0.9, 'cue': 'following'},
      {'duration': 1, 'cue': 'following'},
      {'duration': 1.1, 'cue': 'following'}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
    Routine Encoding
    Routine retro_cue
    Routine Reproduction
    Routine passive
    Routine feedback
    Routine iti
    Routine BlockInfo
  LoopTerminator trials
