PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expName, expInfo['participant'])
  Experiment info = {'participant': 'f"{randint(0, 999999):04.0f}"', 'gender (M/F)': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Use version = 2023.2.3
  Window size (pixels) = [1280, 1024]
  expName = seq_tasks_v2023
  keyboardBackend = PsychToolbox
  logging level = error
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Routines
  Routine Instruction
    RoutineSettingsComponent Instruction
      saveStartStop = False
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    TextComponent text_inst
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Experimental Instruction

        Welcome to our reproduction experiment. In this experiment, you will see a Gabor patch appears on the screen. You need to remember the DURATION of the Gabor patch. After it disappears, a cue (either 'R' or 'F') will appear.

        When the cue is 'R', you are asked to press the 'Down' Arrow key as long as what you perceived. The key press will show a Gabor patch again, helping you compare the last duration.

        If the cue is 'F', a Gabor patch will automatically appear. Your task is to press the 'Down' arrow key as soon as it appears and release the key when it disappears.


        The whole experiment consists of a 1-block practice and a 12-block formal task.

        Press SPACE to start Practice...
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blockPrac
    RoutineSettingsComponent blockPrac
      saveStartStop = False
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    TextComponent Prac_info
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice



        Press SPACE key to start ...
    KeyboardComponent prac_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Encoding
    RoutineSettingsComponent Encoding
      saveStartStop = False
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    GratingComponent stimulus_grating
      contrast = 0.25
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $duration
      tex = sin
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    CodeComponent code_encoding
      Code Type = Auto->JS
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      Begin Experiment:
        # generate random orientation

        orientation = randint(1,180)

        durations = np.arange(0.8, 1.5, 0.1)
      Begin Routine:
        orientation = randint(1,180)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine retro_cue
    RoutineSettingsComponent retro_cue
      saveStartStop = False
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    CodeComponent code_retro_cue
      Code Type = Auto->JS
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      Begin Experiment:
        cue_text = ''
      Begin Routine:
        if cue == "reproduction":
            cue_text = 'R'
        else:
            cue_text = 'F'

        cue_onset = globalClock.getTime()
    TextComponent cue_word
      contrast = .7
      letterHeight = 1
      startVal [time (s)] = .2
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cue_text
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  Routine Reproduction
    RoutineSettingsComponent Reproduction
      saveStartStop = False
      skipIf = $cue == 'following'
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    GratingComponent reproduced_grating
      contrast = 0.25
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [condition] = $key_pressed
      stopVal [condition] = $key_released
      tex = sin
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    CodeComponent code_reproduction
      Code Type = Py
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      Begin Experiment:
        kb = keyboard.Keyboard()

        repDuration = 0

        cue_rts = [] # store the cue to reproductin rt

        gap = 1 # cue onset to the following stimulus onset
      Begin Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        key = kb.getKeys(['down'], waitRelease = False, clear = False)

        key_pressed = False
        key_released = True

        key_onset = 0
        key_offset = 0

        repDuration = 0
      Each Frame:
        keys = kb.getKeys(['down'], waitRelease=False,clear = False)

        for key in keys:
            if key.duration is None:
                key_pressed = True
                key_released = False
                if key_onset == 0:
                    key_onset = globalClock.getTime()

        if key_pressed: # after key pressed
            if isinstance(keys[0].duration, float):
                key_released = True
                key_offset = globalClock.getTime()#keys[0].duration
                repDuration = key_offset - key_onset
                continueRoutine = False
      End Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        #store random orientation in the data
        thisExp.addData('orientation', orientation)
        thisExp.addData('rpr_onset', key_onset)
        thisExp.addData('rpr_duration', repDuration)

        if cue == "reproduction":
            cue2rep_rt = key_onset - cue_onset
            cue_rts.append(cue2rep_rt)
        else:
            cue2rep_rt = 0
        thisExp.addData('cue2rep_rt', cue2rep_rt)
  Routine Follow
    RoutineSettingsComponent Follow
      saveStartStop = False
      skipIf = $cue == 'reproduction'
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    CodeComponent code_follow
      Code Type = Py
      Begin Experiment:
        import random

        followRsp = False
      Begin Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        key = kb.getKeys(['down'], waitRelease = False, clear = False)

        key_pressed = False
        key_released = True

        key_follow_onset = 0
        key_follow_offset = 0

        followProduction = 0
        followRsp = False

        follow_dur = random.choice(durations)
      Each Frame:
        keys = kb.getKeys(['down'], waitRelease=False,clear = False)

        for key in keys:
            if key.duration is None:
                key_pressed = True
                key_released = False
                if key_follow_onset == 0:
                    key_follow_onset = globalClock.getTime()

        if key_pressed: # after key pressed
            if isinstance(keys[0].duration, float):
                key_released = True
                key_follow_offset = globalClock.getTime()
                followProduction = key_follow_offset - key_follow_onset
                followRsp = True
      End Routine:
        kb.clearEvents(eventType='keyboard')
        event.clearEvents(eventType='keyboard')

        #store random orientation in the data
        thisExp.addData('follow_stimuli', follow_dur)
        thisExp.addData('follow_key_onset',key_follow_onset)
        thisExp.addData('follow_production', followProduction)
    GratingComponent follow_grating
      contrast = 0.25
      mask = gauss
      ori [set every frame] = orientation
      sf = 1
      size = (5, 5)
      startVal [time (s)] = $gap
      stopVal [duration (s)] = $follow_dur
      tex = sin
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    TextComponent filler_blank
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $followRsp
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  Routine feedback
    RoutineSettingsComponent feedback
      skipIf = trials.thisN >= 28
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    TextComponent feedback_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every frame] = $fb_text
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        fb_text  = ''
      Begin Routine:
        error_ratio = np.min([np.abs(repDuration/duration -1), np.abs(followProduction/follow_dur -1)])

        if error_ratio > 0.3:
            fb_text = "Your key pressed duration deviated too far!"
        else:
            fb_text = ''
  Routine iti
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    TextComponent iti_blank
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine BlockInfo
    RoutineSettingsComponent BlockInfo
      skipIf = (trials.thisN +1) % 56 > 0
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    TextComponent text_rest
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You did a great job! Please take a rest!








        Press SPACE key to continue ...
    TextComponent blk_infotext
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $blk_info
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    KeyboardComponent block_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_blockinfo
      Code Type = Auto->JS
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      Begin Experiment:
        blk_info = ''
      Begin Routine:
        blknum = 1 + trials.thisN // 56
        blk_info = f"Block {blknum}"
        print(blk_info)

        if trials.thisN == 10: # last trial of the first practice block
            last14Following = cue_rts[-3:]
            gap = np.mean(last14Following) - 0.7
  Routine Goodbye
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    TextComponent goodbye_text
      letterHeight = 0.5
      startVal [time (s)] = 0.0
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      text:
        The whole experiment is completed!

        Many thanks for your participation!
    KeyboardComponent goodbye_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  Routine blockPrac
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 13
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    conditions:
      [{'duration': 0.8, 'cue': 'reproduction'},
      {'duration': 0.9, 'cue': 'reproduction'},
      {'duration': 1, 'cue': 'reproduction'},
      {'duration': 1.1, 'cue': 'reproduction'},
      {'duration': 1.2, 'cue': 'reproduction'},
      {'duration': 1.3, 'cue': 'reproduction'},
      {'duration': 1.4, 'cue': 'reproduction'},
      {'duration': 0.8, 'cue': 'following'},
      {'duration': 0.9, 'cue': 'following'},
      {'duration': 1, 'cue': 'following'},
      {'duration': 1.1, 'cue': 'following'},
      {'duration': 1.2, 'cue': 'following'},
      {'duration': 1.3, 'cue': 'following'},
      {'duration': 1.4, 'cue': 'following'},
      {'duration': 0.8, 'cue': 'reproduction'},
      {'duration': 0.9, 'cue': 'reproduction'},
      {'duration': 1, 'cue': 'reproduction'},
      {'duration': 1.1, 'cue': 'reproduction'},
      {'duration': 1.2, 'cue': 'reproduction'},
      {'duration': 1.3, 'cue': 'reproduction'},
      {'duration': 1.4, 'cue': 'reproduction'},
      {'duration': 0.8, 'cue': 'following'},
      {'duration': 0.9, 'cue': 'following'},
      {'duration': 1, 'cue': 'following'},
      {'duration': 1.1, 'cue': 'following'},
      {'duration': 1.2, 'cue': 'following'},
      {'duration': 1.3, 'cue': 'following'},
      {'duration': 1.4, 'cue': 'following'},
      {'duration': 0.8, 'cue': 'reproduction'},
      {'duration': 0.9, 'cue': 'reproduction'},
      {'duration': 1, 'cue': 'reproduction'},
      {'duration': 1.1, 'cue': 'reproduction'},
      {'duration': 1.2, 'cue': 'reproduction'},
      {'duration': 1.3, 'cue': 'reproduction'},
      {'duration': 1.4, 'cue': 'reproduction'},
      {'duration': 0.8, 'cue': 'following'},
      {'duration': 0.9, 'cue': 'following'},
      {'duration': 1, 'cue': 'following'},
      {'duration': 1.1, 'cue': 'following'}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
    Routine Encoding
    Routine retro_cue
    Routine Reproduction
    Routine Follow
    Routine feedback
    Routine iti
    Routine BlockInfo
  LoopTerminator trials
  Routine Goodbye
